/************************************************************************************************
in the spontaneous section, whether the frequency that cells are firing is suited or not is unclear:
1. cells are injected current that makes cells fired 2 Hz in separated situation (now is this)
2. cells in network are fired in 2Hz on average ( each in network is firing in 2 Hz??) 
************************************************************************************************/

load_file("nrngui.hoc")

objref nclist_us, nclist_spon, nclist_cs
objref  us, cs, sponFire

proc setStim(){local i, j, stim_num, num_vta, dur, num_cs, stim_int, num_ecell_input, num_cell_input, num_cell_out1, num_ecell_out1, num_cell_out2, num_ecell_out2, section_out1_e, section_out1_i, section_out2_e, section_out2_i, l_times, stim_dur, stim_start, stim_set_interval, stim_interval, cls localobj nc, us_tmp, cs_tmp, spon_tmp
    
    stim_num = $1 
    num_vta = $2
    dur = $3
    num_cs = $4
    stim_int = $5
    num_ecell_input = $6
    l_times = $7
    stim_start = $8
    num_cell_full = $9
    num_cell_out1 = $10
    num_cell_out2 = $11
    num_ecell_out1 = $12
    num_ecell_out2 = $13
    num_cell_input = $14
    section_out1_e = $15
    section_out1_i = $16
    section_out2_e = $17
    section_out2_i = $18
    
    stim_dur = stimInt*stimNum
    stim_set_interval = (stim_dur + 100) * 5
    stim_interval = stim_dur + 100
    
    nclist_us = new List()
    us = new List()

    for cls=0, data_num*l_times-1{
	for(i=0;i<num_cell_out1;i+=1){

	    if((i>=section_out1_e*stim_order.x(cls) && i<section_out1_e*(stim_order.x(cls)+1)) || (i>=num_ecell_out1+section_out1_i*stim_order.x(cls) && i<num_ecell_out1+section_out1_i*(stim_order.x(cls)+1))){
		if(pc.gid_exists(i+num_cell_input)){
		    pc.gid2cell(i+num_cell_input).soma {
			//for j=0, l_times-1{
			    us_tmp = new NetStim()
			    us_tmp.start = stim_start+5+stim_interval*cls//+stim_set_interval*j + 5 + stim_interval*cls
			    us_tmp.number = stim_num///2//*3/4
			    us_tmp.interval = stim_int//*2
			    us_tmp.noise = 0.001//0.01//0.001
			    us.append(us_tmp)
			    nc = new NetCon(us_tmp,pc.gid2cell(i+num_cell_input).synlist.object(1),0,0.1,0.2)
			    nclist_us.append(nc)
			//}
		    }
		}
	    }
	}
    }
    
    nclist_cs = new List()
    cs = new List()
    for cls=0, data_num*l_times-1{
	for i=0, num_ecell_input-1 {
	    
	    //the definition for input stimuli
	    if(stimuli[stim_order.x(cls)].x[i]){
		if(pc.gid_exists(i)){
		    pc.gid2cell(i).soma {
			//for j=0, l_times-1 {
			cs_tmp = new NetStim()
			cs_tmp.start = stim_start+stim_interval*cls//+stim_set_interval*j
			cs_tmp.number = stim_num//*5
			cs_tmp.interval = stim_int
			cs_tmp.noise = 0//0.05
			cs.append(cs_tmp)
			nc = new NetCon(cs_tmp,pc.gid2cell(i).synlist.object(0),0,0.1,0.25)//0.1)
			nclist_cs.append(nc)
			
			
			//}
		    }
		}
	    }
	}
    }
    
    for cls=0, 4 {
	for i=0, num_ecell_input-1 {
	    if(stimuli[cls].x[i]){
		if(pc.gid_exists(i)){
		    pc.gid2cell(i).soma {
			cs_tmp = new NetStim()
			cs_tmp.start = startTest+cls*600
			cs_tmp.interval = stim_int
			cs_tmp.number = 19
			cs_tmp.noise = 0
			cs.append(cs_tmp)
			nc = new NetCon(cs_tmp,pc.gid2cell(i).synlist.object(0),0,0.1,0.25)//0.1)
			nclist_cs.append(nc)
		    }
		}
	    }
	}
    }
	  
    nclist_spon = new List()
    sponFire = new List()
    
    for i=0, num_cell_full-1 {
	if(i<num_ecell_input || i>=num_cell_input){
	    if(pc.gid_exists(i)){
		pc.gid2cell(i).soma{
		    spon_tmp = new GammaNoise(0.85)
		    spon_tmp.amp = 0.065
		    spon_tmp.dur = dur
		    spon_tmp.del = 20
		    spon_tmp.forseed = i
		    
		    if((i>=num_cell_input+num_ecell_out1 && i<num_cell_input+num_cell_out1) || (i>=num_cell_input+num_cell_out1+num_ecell_out2 && i<num_cell_full)){
			spon_tmp.KAPPA = OUT1_SPON_I_K
			spon_tmp.THETA = OUT1_SPON_I_T
			
		    }else if(i>=num_cell_input && i<num_cell_input+num_ecell_out1){
			spon_tmp.KAPPA = OUT1_SPON_E_K
			spon_tmp.THETA = OUT1_SPON_E_T
		    }else if(i>=num_cell_input+num_cell_out1 && i<num_cell_input+num_cell_out1+num_ecell_out2){
			spon_tmp.KAPPA = 0.15
		    }else{
			spon_tmp.KAPPA = 0.45
			spon_tmp.THETA = 0.5
		    }

		    nc = new NetCon(spon_tmp,pc.gid2cell(i).synlist.object(1),0,0.1,0.02)
		    sponFire.append(spon_tmp)
		    nclist_spon.append(nc)
		}
	    }
	}
    }
}
